PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Use version = 3.1.5
  Window size (pixels) = [1920, 1080]
  expName = BehaviouralFaces_MEG
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Routines
  Routine trial
  Routine GetVarsReady
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineColor = $[.3,.3,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine extractSession
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        fName=f"ExperimentList_{expInfo['session']}.csv"
  Routine isi
    PolygonComponent polygon_4
      durationEstim = 1
      fillColor = $[1,1,1]
      lineColor = $[0,0,0]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI
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  Routine Ready
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineColor = $[.3,.3,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine trial_2
    ImageComponent image
      image [set every repeat] = $FileName
      ori [set every repeat] = 180*InvertedFlag
      size = (5,7.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine Response
    PolygonComponent polygon_5
      fillColor = $[1,1,1]
      lineColor = $[1,.3,.3]
      shape = star
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'Q','W','O','P'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text
      color = black
      letterHeight = 1
      pos = [0,-3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Happy   Angry   Fear   Neutral
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    ImageComponent rpad2
      disabled = True
      image = responsePad.jpg
      opacity = .8
      size = [12,6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine GetVarsReady_2
    CodeComponent code
      Code Type = Py
      Begin Routine:
        randISI=random()*4+2
  Routine Wait
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        In the following experiment you will
        be presented with faces displaying one
        of the following four emotional states:
        Happy, Anger, Fear or Neutral

        You will be asked to indicate the emotion being depicted using a button press.
    ImageComponent example_faces
      image = C:\Users\User\Downloads\Task Information.docx.png
      pos = (0, 0.075)
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent text_3
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        Happy = Q   Angry = W   Fear = O    Neutral = P

        Following the presentation of a face,
        you will be presented with a blank screen
        containing a star in the centre,
        during which you may respond using a
        button press corresponding to the emotional
        state of the face you have just viewed.
        Please respond as quickly as possible.

        Press any button to proceed to the experiment.
  Routine Countdown
    TextComponent junkframes
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Waiting for junk 
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  Routine responsePad
Flow
  Routine Wait
  Routine extractSession
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $fName
    loopType = random
    nReps = 1
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    Routine GetVarsReady_2
    Routine isi
    Routine Ready
    Routine trial_2
    Routine Response
  LoopTerminator trials
