PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Use version = 3.1.5
  Window size (pixels) = [1920, 1080]
  expName = showFaces3p5_correct
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Routines
  Routine trial
  Routine GetVarsReady
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineColor = $[.3,.3,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine extractSession
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        fName=f"ExperimentList_{expInfo['session']}.csv"
  Routine isi
    PolygonComponent polygon_4
      durationEstim = 1
      fillColor = $[1,1,1]
      lineColor = $[0,0,0]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI
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  Routine Ready
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineColor = $[.3,.3,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine trial_2
    ImageComponent image
      image [set every repeat] = $FileName
      ori [set every repeat] = 180*InvertedFlag
      size = (5,7.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine Response
    PolygonComponent polygon_5
      fillColor = $[1,1,1]
      lineColor = $[1,.3,.3]
      shape = star
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'up','down','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text
      color = black
      letterHeight = 1
      pos = [0,-3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Happy   Angry   Fear   Neutral
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    ImageComponent rpad2
      disabled = True
      image = responsePad.jpg
      opacity = .8
      size = [12,6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine GetVarsReady_2
    CodeComponent code
      Code Type = Py
      Begin Routine:
        randISI=random()*4+2
  Routine Wait
    KeyboardComponent key_resp_25
      allowedKeys = 'y','n','left','right','space','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent text_2
      letterHeight = 1.75
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Please Wait
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    ImageComponent rPadPic
      image = responsePad.jpg
      pos = [0,-5]
      size = [18,9]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine Countdown
    TextComponent junkframes
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Waiting for junk 
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  Routine responsePad
Flow
  Routine Wait
  Routine extractSession
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $fName
    loopType = random
    nReps = 1
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    Routine GetVarsReady_2
    Routine isi
    Routine Ready
    Routine trial_2
    Routine Response
  LoopTerminator trials
